PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1200, 600]
  expName = simpleIdea
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Routines
  Routine routine_1_InitExperiment
    CodeComponent InitCode
      Code Type = Py
      Begin Experiment:
        # get packages we might need
        # import random

        # Experiment running conditions
        deltas = [200, 300, 400, 500, 600]
        num_reps = 1
        num_repsEsts = 1
        num_blocks = 2

        #delta_order = []
        #for d in deltas:
        #    for rep in range(0,num_reps):
        #        delta_order.append(d)

        #demo_delta = []
        #for b in range(0,num_blocks):
        #    for d in deltas:
        #        for rep in range(0, num_repsEsts):
        #            demo_delta.append(d)

        # delta_order = shuffle(numpy.repeat(deltas, num_reps))
        # shuffle(delta_order)

        # get number of repetitions for trials and demo
        demo_trials = num_repsEsts * len(deltas)
        num_trials = num_reps * len(deltas)
        num_conf_trials = 2 * len(deltas)



        # Screen settings
        Screen_height = 600
        Screen_width = 1200

        # Trial conditions
        Trial_time = 120 # this is specified in frames for now

        # avatar setup
        avatar_speed = 4
        avatar_y_offset = 100
        avatar_reach = 30
        box_size = 50
        box_truck   = [1,-1,-1]
        box_placed  = [.5,-.5,-.5]
        box_build   = [.09, -.45,-.85]
        box_burning = [.64, -.17, -.76]
        box_burnt   = [-.9, -.9, -.9]

        # Control Arrows
        Arrow_init_colour = [1,1,1]
        Arrow_clik_colour = [0,0,1]
        Arrow_size = 40
        Arrow_orient = [0,180,270,90]

        # this needs to be set by size of the object
        init_posx = -150
        init_posy = 0
        padding = 5
        Arrow_y = [init_posx,init_posx-(2*Arrow_size)-(2*padding),init_posx-Arrow_size - padding, init_posx-Arrow_size - padding]
        Arrow_x = [init_posy, init_posy, -Arrow_size-padding, Arrow_size+padding]
      Begin Routine:
        # get packages we might need
        # import random

        # Experiment running conditions
        #deltas = [200, 300, 400, 500, 600]
        #num_trials = 5

        # Screen settings
        #Screen_height = 600
        #Screen_width = 1200

        # Trial conditions
        #Trial_time = 120 # this is specified in frames for now

        # avatar setup
        #avatar_speed = 3
        #avatar_y_offset = 100
        #avatar_reach = 55
        #box_size = 50
        #box_truck   = [1,-1,-1]
        #box_placed  = [.5,-.5,-.5]
        #box_build   = [.09, -.45,-.85]
        #box_burning = [.64, -.17, -.76]
        #box_burnt   = [-.9, -.9, -.9]

        # Control Arrows
        #Arrow_init_colour = [1,1,1]
        #Arrow_clik_colour = [0,0,1]
        #Arrow_size = 30
        #Arrow_orient = [0,180,270,90]
        #Arrow_y = [-150,-220,-185,-185]
        #Arrow_x = [0, 0, -35, 35]
  Routine routine_2_WelcomeScreen
    TextComponent WelcomeText
      letterHeight = 25
      startVal [frame N] = 0.0
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      text:
        Welcome to the experiment

        Press Space to continue
    KeyboardComponent WelcomeEscape
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_4_Trial_Instructions
    TextComponent TrialInst
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        You will place the 'truck' by clicing between the two lines on screen.
        Once you are happy with the placement, press the spacebar to begin the trial.
        After a short amount of time, one of the two buidlings will catch fire,
        at which point you are to drive the truck towards this buidling.

        Press the spacebar to continue
    KeyboardComponent InstSkip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent ResetTrials
      Code Type = Py
      Begin Routine:
        trial_num = 0

        delta_order = []
        for d in deltas:
            for rep in range(0,num_reps):
                delta_order.append(d)

        # delta_order = shuffle(numpy.repeat(deltas, num_reps))
        shuffle(delta_order)
  Routine routine_5a_PlaceAvatarInit
    CodeComponent PlaceInit
      Code Type = Py
      Begin Experiment:
        trial_num = 0
      Begin Routine:
        # get delta for this trial
        delta_thisT = delta_order[trial_num] - avatar_y_offset

        # set target position
        left_target = -delta_thisT
        right_target = delta_thisT

        # set the delay on each trial so pariticpants can't predict
        # when to respond
        delay = round((random() * 90)) + 60

        # Tried to append another trial given some condition
        # Might not be able to do that too easily...
        #if delta_thisT == 200:
        #    deltas.append(200)
        #    num_trials += 1


        # setting colours
        left_colour = box_build
        right_colour = box_build

        # choose target
        choice = random()
        if choice <.5:
            target = "left"
        else:
            target = "right"

        # Isn't quite working... but it's not the most important step just now
        # choice = random.choice([0,1])
        # print(choice)
        #if choice == 1:
        #    left_colour = box_burning
        #    right_colour = box_build
        #else :
        #    left_colour = box_burning
        #    right_colour = box_build
      End Routine:
        trial_num += 1
  Routine routine_5b_PlacingAvatar
    PolygonComponent PlacementArea
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every frame] = $(Screen_width, box_size + 10)
      startVal [time (s)] = 0.0
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    MouseComponent AvatarMouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [frame N] = 0.0
      timeRelativeTo = routine
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    PolygonComponent leftTarget
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = $(left_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    PolygonComponent rightTarget
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = $(right_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    KeyboardComponent PlacingKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent AvatarPlace
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = $(Avatar_x, Avatar_y)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        Avatar_x = 0
        Avatar_y = 100
      Begin Routine:
        frame = 0
        Avatar_x = 0
      Each Frame:
        # check for mouse click
        if AvatarMouse.getPos()[1] > 100 - (box_size/2) and AvatarMouse.getPos()[1] < 100 + (box_size/2):
            if AvatarMouse.getPressed()[0]:
                Avatar_x = AvatarMouse.getPos()[0]
                Avatar_y = 100
  Routine routine_5c_DrivingAvatar
    MouseComponent DrivingMouse
      clickable = upShape, downShape, rightShape, leftShape
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [frame N] = delay
      stopVal [frame N] = $Trial_time + delay
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    KeyboardComponent DrivingKeys
      allowedKeys = 'up','down','right','left'
      forceEndRoutine = False
      startVal [frame N] = delay
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent DrivingBoundary
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every frame] = $(Screen_width, box_size + 10)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    CodeComponent DrivingCode
      Code Type = Py
      Begin Routine:
        AvatarDrive_x = Avatar_x
        AvatarDrive_y = Avatar_y

        # get target location
        if target == "left":
            target_x = left_target
        elif target == "right":
            target_x = right_target
        target_y = 0

        # centre mouse by controls
        DrivingMouse.setPos(newPos =(0, Arrow_y[2]))

        # frame counter
        frame = 0

        state = "null"

        # set colours for arrows
        up_col    = Arrow_init_colour
        down_col  = Arrow_init_colour
        left_col  = Arrow_init_colour
        right_col = Arrow_init_colour
      Each Frame:
        # add to frame count and check whether to change colour
        frame += 1

        # keep mouse in place until trial starts
        if frame < delay:
            DrivingMouse.setPos(newPos =(0, Arrow_y[2]))

        # Don't draw the target early
        if frame >= delay:
            if target == "left":
                left_colour = box_burning
            elif target == "right":
                right_colour = box_burning

        # Probably don't need this now since keys aren't great
        key_pressed = DrivingKeys.keys

        # use the mouse to drive the avatar
        if DrivingMouse.isPressedIn(upClick):
            AvatarDrive_y += avatar_speed
            up_col = Arrow_clik_colour
        elif DrivingMouse.isPressedIn(downClick):
            AvatarDrive_y -= avatar_speed
            down_col = Arrow_clik_colour
        elif DrivingMouse.isPressedIn(rightClick):
            AvatarDrive_x += avatar_speed
            right_col = Arrow_clik_colour
        elif DrivingMouse.isPressedIn(leftClick):
            AvatarDrive_x -= avatar_speed
            left_col = Arrow_clik_colour
        else:
            # reset the colours if nothing is clicked
            up_col    = Arrow_init_colour
            down_col  = Arrow_init_colour
            left_col  = Arrow_init_colour
            right_col = Arrow_init_colour

        # Works by allowing people to set the direction of travel and the
        # avatar will drive in that direction until another key is pressed
        # NB: needs to only store the last key press
        #if key_pressed == 'up':
        #    AvatarDrive_y += avatar_speed
        #elif key_pressed == 'down':
        #    AvatarDrive_y -= avatar_speed
        #elif key_pressed == 'right':
        #    AvatarDrive_x += avatar_speed
        #elif key_pressed == 'left':
        #    AvatarDrive_x -= avatar_speed

        # check for success or failure
        # Was the target reached?
        x_dist = AvatarDrive_x - target_x
        y_dist = AvatarDrive_y - target_y
        dist = (x_dist)**2 + (y_dist)**2


        if dist <= avatar_reach**2:
            success = 1
            #routine_5c_DrivingAvatar.finished = True
            continueRoutine = False

        # has time run out?
        if frame >= Trial_time + delay:
            success = 0
            if target == "left":
                left_colour = box_burnt
            elif target == "right":
                right_colour = box_burnt
      End Routine:
        # Establish success or failure

        # This was a dumb thought... ignore that
        #if (AvatarDrive_y)**2 + (AvatarDrive_x)**2 == (avatar_reach)**2:
        #    success = 1
        #    if target == "left":
        #        left_colour = box_build
        #    elif target == "right":
        #        right_colour = box_build


        # check if time ran out
        if success == 0:
            if target == "left":
                left_colour = box_burnt
            elif target == "right":
                right_colour = box_burnt
        if success == 1:
            if target == "left":
                left_colour = box_build
            elif target == "right":
                right_colour = box_build
    PolygonComponent AvatarPlaced
      fillColor [set every frame] = $box_placed
      lineColor [set every frame] = $box_placed
      pos [set every frame] = $(Avatar_x, Avatar_y)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent LeftBuild
      fillColor [set every frame] = $left_colour
      lineColor [set every frame] = $left_colour
      pos [set every frame] = $(left_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent RightBuild
      fillColor [set every frame] = $right_colour
      lineColor [set every frame] = $right_colour
      pos [set every frame] = $(right_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent AvatarDrive
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = $(AvatarDrive_x, AvatarDrive_y)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent upClick
      fillColor [set every frame] = $[1,1,1]
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[0]
      pos [set every frame] = $(Arrow_x[0], Arrow_y[0])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [frame N] = 0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent downClick
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[1]
      pos [set every frame] = $(Arrow_x[1], Arrow_y[1])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent leftClick
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[2]
      pos [set every frame] = $(Arrow_x[2], Arrow_y[2])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent rightClick
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      ori [set every frame] = 0
      pos [set every frame] = (Arrow_x[3], Arrow_y[3])
      shape = rectangle
      size [set every frame] = (Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent upShape
      fillColor [set every frame] = $up_col
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[0]
      pos [set every frame] = $(Arrow_x[0], Arrow_y[0])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent downShape
      fillColor [set every frame] = $down_col
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[1]
      pos [set every frame] = $(Arrow_x[1], Arrow_y[1])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent rightShape
      fillColor [set every frame] = $right_col
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[3]
      pos [set every frame] = $(Arrow_x[3], Arrow_y[3])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent leftShape
      fillColor [set every frame] = $left_col
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[2]
      pos [set every frame] = $(Arrow_x[2], Arrow_y[2])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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  Routine routine_5d_TrialFeedback
    CodeComponent TrialFeedbackCode
      Code Type = Py
      Begin Routine:
        if success == 1:
            Feedback_text = "You made it! :)"
        elif success == 0:
            Feedback_text = "The house burnt down :/"
    PolygonComponent DrivingBoundaryFeedback
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every frame] = $(Screen_width, box_size + 10)
      startVal [time (s)] = 0
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    PolygonComponent AvatarPlacedFeedback
      fillColor [set every frame] = $box_placed
      lineColor [set every frame] = $box_placed
      pos [set every frame] = $(Avatar_x, Avatar_y)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0
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    PolygonComponent LeftFeedback
      fillColor [set every frame] = $left_colour
      lineColor [set every frame] = $left_colour
      pos [set every frame] = $(left_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    PolygonComponent RightFeedback
      fillColor [set every frame] = $right_colour
      lineColor [set every frame] = $right_colour
      pos [set every frame] = $(right_target, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    PolygonComponent AvatarFeedback
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = (AvatarDrive_x, AvatarDrive_y)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 20
      pos = (0, 150)
      startVal [time (s)] = 0.0
      text [set every frame] = $Feedback_text
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    KeyboardComponent TrialMoveOn
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 20
      pos [set every frame] = $(0, -avatar_y_offset)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue
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  Routine routine_3a_PracticeInit
    CodeComponent DemoInit
      Code Type = Py
      Begin Experiment:
        # init trial counter
        trial_num_demo = 0
      Begin Routine:
        # get delta for this trial
        delta_thisD = demo_delta[trial_num_demo] - avatar_y_offset

        # choose presentation side
        choice = random()
        if choice <.5:
            delta_thisD = -delta_thisD

        # set the delay on each trial so pariticpants can't predict
        # when to respond
        delay = round((random() * 90)) + 60
      End Routine:
        trial_num_demo += 1
  Routine routine_3b_PresentSetup
    CodeComponent DemoCode
      Code Type = Py
      Begin Experiment:
        Avatar_x_demo = 0
        Avatar_y_demo = 100
    PolygonComponent borderlinesDemo
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every frame] = $(Screen_width + 10, box_size + 10)
      startVal [time (s)] = 0.0
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    KeyboardComponent DemoKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent AvatarDemo
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = $(Avatar_x_demo, Avatar_y_demo)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [time (s)] = 0.0
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    PolygonComponent DemoTarget
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = $(delta_thisD, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    TextComponent StartDemoTrial
      letterHeight = 20
      pos [set every frame] = $(0, avatar_y_offset + box_size + 10)
      startVal [time (s)] = 0.0
      text = Press the spacebar to start the trial
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  Routine routine_3c_driving
    CodeComponent DemoCodeDriving
      Code Type = Py
      Begin Routine:
        frameDemo = 0
        target_colour = box_build

        Avatar_x_Demo = 0
        Avatar_y_Demo = avatar_y_offset

        # set colours for arrows
        up_col    = Arrow_init_colour
        down_col  = Arrow_init_colour
        left_col  = Arrow_init_colour
        right_col = Arrow_init_colour
      Each Frame:
        frameDemo += 1

        # stop mouse moving if it's too early
        if frameDemo <= delay:
            DrivingMouse.setPos(newPos =(0, Arrow_y[2]))

        # change colour after delay
        if frameDemo >= delay:
            target_colour = box_burning

        # update position
        if DemoMouse.isPressedIn(UpClickDemo):
            Avatar_y_Demo += avatar_speed
            up_col = Arrow_clik_colour
        elif DemoMouse.isPressedIn(DownClickDemo):
            Avatar_y_Demo -= avatar_speed
            down_col = Arrow_clik_colour
        elif DemoMouse.isPressedIn(RightClickDemo):
            Avatar_x_Demo += avatar_speed
            right_col = Arrow_clik_colour
        elif DemoMouse.isPressedIn(LeftClickDemo):
            Avatar_x_Demo -= avatar_speed
            left_col = Arrow_clik_colour
        else:
            # reset the colours if nothing is clicked
            up_col    = Arrow_init_colour
            down_col  = Arrow_init_colour
            left_col  = Arrow_init_colour
            right_col = Arrow_init_colour


        # check for success or failure
        # Was the target reached?
        x_dist = Avatar_x_Demo - delta_thisD
        y_dist = Avatar_y_Demo - 0
        dist = (x_dist)**2 + (y_dist)**2


        if dist <= avatar_reach**2:
            success = 1
            continueRoutine = False
            target_colour = box_build

        # has time run out?
        if frameDemo >= Trial_time + delay:
            success = 0
            target_colour = box_burnt
    MouseComponent DemoMouse
      clickable = UpClickDemo, DownClickDemo, RightClickDemo, LeftClickDemo
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [frame N] = $delay
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent boundaryDemo
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every repeat] = $(Screen_width + 10, box_size + 10)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent AvatarPlacedDemo
      fillColor [set every frame] = $box_placed
      lineColor [set every frame] = $box_placed
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent DemoTargetDrive
      fillColor [set every frame] = $target_colour
      lineColor [set every frame] = $target_colour
      pos [set every frame] = $(delta_thisD, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent AvatarDriveDemo
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = $(Avatar_x_Demo, Avatar_y_Demo)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent UpClickDemo
      fillColor [set every frame] = $[1,1,1]
      lineColor [set every frame] = $[-1,-1,-1]
      pos [set every frame] = $(Arrow_x[0], Arrow_y[0])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent DownClickDemo
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(Arrow_x[1], Arrow_y[1])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent LeftClickDemo
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(Arrow_x[2], Arrow_y[2])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent RightClickDemo
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(Arrow_x[3], Arrow_y[3])
      shape = rectangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent UpArrow
      fillColor [set every frame] = $up_col
      lineColor [set every frame] = $[-1,-1,-1]
      ori [set every frame] = $(Arrow_orient[0])
      pos [set every frame] = $(Arrow_x[0], Arrow_y[0])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent DownArrow
      fillColor [set every frame] = $down_col
      lineColor = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[1]
      pos [set every frame] = $(Arrow_x[1], Arrow_y[1])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent LeftArrow
      fillColor [set every frame] = $left_col
      lineColor = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[2]
      pos [set every frame] = $(Arrow_x[2], Arrow_y[2])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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    PolygonComponent RightArrow
      fillColor [set every frame] = $right_col
      lineColor = $[-1,-1,-1]
      ori [set every frame] = $Arrow_orient[3]
      pos [set every frame] = $(Arrow_x[3], Arrow_y[3])
      shape = triangle
      size [set every frame] = $(Arrow_size, Arrow_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + delay
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  Routine routine_3d_feedback
    CodeComponent DemoFeedbackCode
      Code Type = Py
      Begin Routine:
        if success == 1:
            Feedback_Text = "You made it! :)"
        elif success == 0:
            Feedback_Text = "The house burnt down :/"
    PolygonComponent AvatarFeedbackDemo
      fillColor [set every frame] = $target_colour
      lineColor [set every frame] = $target_colour
      pos [set every frame] = $(delta_thisD, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    PolygonComponent BoundaryFeedBack
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every frame] = $(Screen_width + 10, box_size + 10)
      startVal [time (s)] = 0.0
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    PolygonComponent PlacedFeedback
      fillColor [set every frame] = $box_placed
      lineColor [set every frame] = $box_placed
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    PolygonComponent AvatarDemoFeedback
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = $(Avatar_x_Demo, Avatar_y_Demo)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    TextComponent FeedbackText
      letterHeight = 20
      pos [set every frame] = $(0, avatar_y_offset + box_size + 10)
      startVal [time (s)] = 0.0
      text [set every frame] = $Feedback_Text
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    KeyboardComponent DemoFeedBackMoveOn
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 60
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    TextComponent FeedbackText_2
      letterHeight = 20
      pos [set every frame] = $(0, -avatar_y_offset)
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue
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  Routine routine_2a_DemoExplanation
    TextComponent text_3
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        In this part, you will gain some practice moving the avatar towards a single target.
        After pressing the spacebar to start the trial, a shord period of time will pass, after which the target will turn orange.
        Your task is to drive the avatar towards this target within the time limit. To do this, you will click the arrow boxes at the bottom of the screen.

        Press the spacebar to continue
    KeyboardComponent EndDemoExplantion
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # init trial counter
        trial_num_demo = 0

        demo_delta = []

        for d in deltas:
            for rep in range(0, num_repsEsts):
                demo_delta.append(d)
  Routine routine_6a_Confidence
    RatingScaleComponent rating
      forceEndRoutine = True
      high = Yes
      low = No
      markerStart = 4
      pos = 0, $avatar_y_offset
      scaleDescription = Will the Avatar reach the targer? 0 = No, 1 = Yes
      size = 1
      startVal [time (s)] = 0.0
      visualAnalogScale = True
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        d = conf_delta[trial_num_conf] - avatar_y_offset
        if random() < .5:
            d = d * -1
      End Routine:
        trial_num_conf += 1
    PolygonComponent ConfBoundary
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every frame] = $(Screen_width + 10, box_size + 10)
      startVal [time (s)] = 0.0
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    PolygonComponent ConfAvatar
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = $(0, avatar_y_offset)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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    PolygonComponent ConfTarget
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = $(d, 0)
      shape = rectangle
      size [set every frame] = $(box_size, box_size)
      startVal [time (s)] = 0.0
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  Routine routine_6_ConfidenceExplanation
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        trial_num_conf = 0

        conf_reps = 2
        conf_delta = []
        for d in deltas:
            for reps in range(0, conf_reps):
                conf_delta.append(d)
        shuffle(conf_delta)
Flow
  Routine routine_1_InitExperiment
  Routine routine_2_WelcomeScreen
  LoopInitiator BlockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = $num_blocks
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    Routine routine_2a_DemoExplanation
    LoopInitiator DemoLoop loopType="TrialHandler"
      loopType = random
      nReps = $demo_trials
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      Routine routine_3a_PracticeInit
      Routine routine_3b_PresentSetup
      Routine routine_3c_driving
      Routine routine_3d_feedback
    LoopTerminator DemoLoop
    Routine routine_4_Trial_Instructions
    LoopInitiator DecisionTrialLoop loopType="TrialHandler"
      loopType = sequential
      nReps = $num_trials
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      Routine routine_5a_PlaceAvatarInit
      Routine routine_5b_PlacingAvatar
      Routine routine_5c_DrivingAvatar
      Routine routine_5d_TrialFeedback
    LoopTerminator DecisionTrialLoop
    Routine routine_6_ConfidenceExplanation
    LoopInitiator ConfidenceLoop loopType="TrialHandler"
      loopType = random
      nReps = $num_conf_trials
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      Routine routine_6a_Confidence
    LoopTerminator ConfidenceLoop
  LoopTerminator BlockLoop
